[[model]]
name: Beattie-2017-IKr
author: Michael Clerx
desc: Kylie's model plus a model imported from Aidan's web lab prototype
# Initial values
# My version
ikr.open = 0
ikr.active = 1
# Aidan's version
ikr2.O  = 0
ikr2.OI = 0
ikr2.CI = 0
# Kylie's version
ikr3.y1 = 0
ikr3.y2 = 0
ikr3.y3 = 0

#
# Simulation engine variables
#
[engine]
time = 0 bind time
pace = 0 bind pace

#
# Membrane potential
#
[membrane]
V = engine.pace
    desc: membane potential
    in [mV]

[nernst]
EK = -85 [mV]

[ikr]
use membrane.V
IKr = g * open * active * (V - nernst.EK)
dot(open) = (inf - open) / tau
    inf = k1 * tau
    tau = 1 / (k1 + k2)
    k1 = p1 * exp(p2 * V)       # k open
    k2 = p3 * exp(-p4 * V)      # k close
dot(active) = (inf - active) / tau
    inf = k4 * tau
    tau = 1 / (k3 + k4)
    k3 = p5 * exp(p6 * V)       # k inactivation
    k4 = p7 * exp(-p8 * V)      # k activation
p1 = 2.26e-4 [1/ms]
p2 = 0.0699 [1/mV]
p3 = 3.45e-5 [1/ms]
p4 = 0.05462 [1/mV]
p5 = 0.0873 [1/ms]
p6 = 8.91e-3 [1/mV]
p7 = 5.15e-3 [1/ms]
p8 = 0.03158 [1/mV]
p9 = 0.1524 [mS/uF]
g = p9

#
# Model from CellML file on Aidan's web lab prototype (2017-11-29)
#
[ikr2]
use membrane.V
IKr = p9 * O * (V - nernst.EK)
C = 1 - (O + OI + CI)
dot(O)  = kO * C  + kA * OI - (kC * O  + kI * O )
dot(CI) = kC * OI + kI * C  - (kO * CI + kA * CI)
dot(OI) = kO * CI + kI * O  - (kC * OI + kA * OI)
kO = p1 * exp(p2 * V)
kC = p3 * exp(-p4 * V)
kA = p5 * exp(-p6 * V)
kI = p7 * exp( p8 * V)
p1 = 2.26e-4 [1/ms]
p2 = 0.0699 [1/mV]
p3 = 3.45e-5 [1/ms]
p4 = 0.05462 [1/mV]
p7 = 0.0873 [1/ms]
p8 = 8.91e-3 [1/mV]
p5 = 5.15e-3 [1/ms]
p6 = 0.03158 [1/mV]
p9 = 0.1524 [mS/uF]

#
# Model from Kylie's mex file (HH)
#
[ikr3]
IKr = p9 * y3 * (V - nernst.EK)
use membrane.V
k43 = p1 * exp( p2 * V)
k34 = p3 * exp(-p4 * V)
k32 = p5 * exp( p6 * V)
k23 = p7 * exp(-p8 * V)
k12 = k43
k21 = k34
k41 = k32
k14 = k23
dot(y1) = -k12 * y1 + k21 * y2 + k41 * y4 - k14 * y1
dot(y2) = -k23 * y2 + k32 * y3 + k12 * y1 - k21 * y2
dot(y3) = -k34 * y3 + k43 * y4 + k23 * y2 - k32 * y3
y4 = 1 - y1 - y2 - y3
p1 = 2.26e-4 [1/ms]
p2 = 0.0699 [1/mV]
p3 = 3.45e-5 [1/ms]
p4 = 0.05462 [1/mV]
p5 = 0.0873 [1/ms]
p6 = 8.91e-3 [1/mV]
p7 = 5.15e-3 [1/ms]
p8 = 0.03158 [1/mV]
p9 = 0.1524 [mS/uF]

[[script]]
import myokit
import myokit.pacing as pacing
import numpy as np
import matplotlib
import matplotlib.pyplot as pl

#
# Simple IKr test script
#

# Get model
m = get_model()

# Create pacing protocol
v = np.arange(-100, 50 + 10, 10)
p = pacing.steptrain(
        vsteps=v,
        vhold=-80,
        tpre=2000,
        tstep=5000,
        tpost=3000)

# Run simulation
s = myokit.Simulation(m, p)
d = s.run(p.characteristic_time())

# Create colormap for plotting
cmap = matplotlib.cm.get_cmap('viridis')
norm = matplotlib.colors.Normalize(0, len(v))

# Plot data as overlapping steps
d2 = d.npview()
d2 = d2.regularize(0.5)
d2 = d2.fold(10000)
pl.figure()
for k in xrange(len(v)):
    pl.subplot(4,1,1)
    pl.plot(d2.time(), d2['membrane.V', k], color=cmap(norm(k)))
    pl.subplot(4,1,2)
    pl.plot(d2.time(), d2['ikr.IKr', k], color=cmap(norm(k)))
    pl.subplot(4,1,3)
    pl.plot(d2.time(), d2['ikr2.IKr', k], color=cmap(norm(k)))
    pl.subplot(4,1,4)
    pl.plot(d2.time(), d2['ikr3.IKr', k], color=cmap(norm(k)))
pl.show()

