[[model]]
name: model-14
author: Sanmitra Ghosh
desc: Check associated model deifintion document
# Initial values
ikr.C3 = 1
ikr.C2 = 0
ikr.C1 = 0
ikr.O = 0

#
# Simulation engine variables
#
[engine]
time = 0 bind time
pace = 0 bind pace

#
# Membrane potential
#
[membrane]
V = engine.pace
    desc: membane potential
    in [mV]

[nernst]
EK = -85 [mV]

#
# Model from Kylie's mex file (HH)
#
[ikr]
use membrane.V
IKr = p9 * O * (V - nernst.EK)
I = 1 - (O + C1 + C2 + C3)

am = p1 * exp( p2 * V)
bm = p3 * exp(-p4 * V)
a1 = p5 * exp( p6 * V)
b1 = p7 * exp(-p8 * V)


dot(C1) = 3*bm  * O + 2*am * C2 -C1*(am + 2*bm)
dot(C2) = 2*bm * C1 + 3*am * C3 - C2*(2*am + bm)
dot(C3) = bm * C2 - 3*am * C3
dot(O) = b1 * I + am * C1 - O*(a1 + 3*bm)

p1 = 2.26e-4 [1/ms]
p2 = 0.06990 [1/mV]
p3 = 3.45e-5 [1/ms]
p4 = 0.05462 [1/mV]
p5 = 0.08730 [1/ms]
p6 = 8.91e-3 [1/mV]
p7 = 5.15e-3 [1/ms]
p8 = 0.03158 [1/mV]
p9 = 0.15240 [mS/uF]

n_params = 9
