[[model]]
name: model-2
author: Sanmitra Ghosh
desc: Simple three state model (HH act, Markov inact)
# Initial values
ikr.O = 0
ikr.C = 1

#
# Simulation engine variables
#
[engine]
time = 0 bind time
pace = 0 bind pace

#
# Membrane potential
#
[membrane]
V = engine.pace
    desc: membane potential
    in [mV]

[nernst]
EK = -85 [mV]

#
# Model from Kylie's mex file (HH)
#
[ikr]
use membrane.V
IKr = p9 * O * (V - nernst.EK)
I = 1 - (O + C)
bm = p1 * exp( p2 * V)
am = p3 * exp(-p4 * V)
b = p5 * exp( p6 * V)
a = p7 * exp(-p8 * V)

dot(O) = -am * O + bm * C -b * O + a * I
dot(C) = -bm * C + am * O



p1 = 2.26e-4 [1/ms]
p2 = 0.06990 [1/mV]
p3 = 3.45e-5 [1/ms]
p4 = 0.05462 [1/mV]
p5 = 0.08730 [1/ms]
p6 = 8.91e-3 [1/mV]
p7 = 5.15e-3 [1/ms]
p8 = 0.03158 [1/mV]
p9 = 0.15240 [mS/uF]

n_params = 9

