[[model]]
name: model-21
author: Sanmitra Ghosh
desc: Check associated model deifintion document
# Initial values
ikr.C3 = 1
ikr.C2 = 0
ikr.C1 = 0
ikr.O = 0
ikr.I = 0
ikr.IC1 = 0
ikr.IC2 = 0

#
# Simulation engine variables
#
[engine]
time = 0 bind time
pace = 0 bind pace

#
# Membrane potential
#
[membrane]
V = engine.pace
    desc: membane potential
    in [mV]

[nernst]
EK = -85 [mV]

#
# Model from Kylie's mex file (HH)
#
[ikr]
use membrane.V
IKr = p23 * O * (V - nernst.EK)

IC2 = 1 - (C1 + C2 C3 + O + I + IC1 + IC2)

ah = p1 * exp( p2 * V)
bh = p3 * exp(-p4 * V)
a1 = p5 * exp( p6 * V)
b1 = p7 * exp(-p8 * V)
a2 = p9 * exp( p10 * V)
b2 = p11 * exp(-p12* V)
a3 = p13 * exp( p14 * V)
b3 = p15 * exp(-p16 * V)
a4 = p17 * exp(p18* V)
b4 = (a4*b1)/a1
a5 = p19 * exp(p20 * V)
b5 = (a5*b2)/a2
a6 = p21 * exp(p22 * V)
b5 = (a6*b3)/a3

dot(C3) = b1*C2 + bh*IC3 - C3*(a1 + ah)
dot(C2) = b2*C1 + a1*C3 +bh*IC2 - C2*(a2 + b1 + ah)
dot(C1) = b3*O + a2*C2 + bh*IC1 - C1*(a3 + b2 + ah)
dot(O) = bh*I + a3*C1 - O*(b3 + ah)
dot(I) = ah*O + a6*IC1 - I*(bh + b6)
dot(IC1) = b6*I + a5*IC2 + ah*C1 - IC1*(a6 + bh + b5)
dot(IC2) = b5*IC1 + a4*IC3 + ah*C2 - IC2*(a5 + bh + b4)

p1 = 2.26e-4 [1/ms]
p2 = 0.06990 [1/mV]
p3 = 3.45e-5 [1/ms]
p4 = 0.05462 [1/mV]
p5 = 0.08730 [1/ms]
p6 = 8.91e-3 [1/mV]
p7 = 5.15e-3 [1/ms]
p8 = 0.03158 [1/mV]
p9 = 2.26e-4 [1/ms]
p10 = 0.06990 [1/mV]
p11 = 3.45e-5 [1/ms]
p12 = 0.05462 [1/mV]
p13 = 0.08730 [1/ms]
p14 = 8.91e-3 [1/mV]
p15 = 5.15e-3 [1/ms]
p16 = 0.03158 [1/mV]
p17 = 0.08730 [1/ms]
p18 = 8.91e-3 [1/mV]
p19 = 5.15e-3 [1/ms]
p20 = 0.03158 [1/mV]
p21 = 5.15e-3 [1/ms]
p22 = 0.03158 [1/mV]
p23 = 0.15240 [mS/uF]

n_params = 23

