[[model]]
name: model-4
author: Sanmitra Ghosh
desc: Check associated model deifintion document
# Initial values
ikr.C = 1
ikr.O = 0
ikr.I = 0

#
# Simulation engine variables
#
[engine]
time = 0 bind time
pace = 0 bind pace

#
# Membrane potential
#
[membrane]
V = engine.pace
    desc: membane potential
    in [mV]

[nernst]
EK = -85 [mV]

#
# Model from Kylie's mex file (HH)
#
[ikr]
use membrane.V
IKr = p11 * O * (V - nernst.EK)
IC = 1 - (I + O + C)

b2 = p1 * exp(p2*V)
a1 = p3 * exp(-p4*V)
a4 = p5 * exp(p6*V)
b4 = p7 * exp(-p8*V)
a3 = p9 * exp(-p10*V)
b3 = (a3*b2)/a1


dot(C) = a1*O + b4*IC - C*(b2+a4)
dot(O) = b2*C + b4*I - O*(a4+a1)
dot(I) = a4*O + b3*IC -I*(b4 + a3)




p1 = 2.26e-4 [1/ms]
p2 = 0.06990 [1/mV]
p3 = 3.45e-5 [1/ms]
p4 = 0.05462 [1/mV]
p5 = 0.08730 [1/ms]
p6 = 8.91e-3 [1/mV]
p7 = 5.15e-3 [1/ms]
p8 = 0.03158 [1/mV]
p9 = 5.15e-3 [1/ms]
p10 = 0.03158 [1/mV]
p11 = 0.15240 [mS/uF]

n_params = 11

