[[model]]
name: model-5
author: Sanmitra Ghosh
desc: Check associated model deifintion document
# Initial values
ikr.C = 1
ikr.O = 0
ikr.I = 0

#
# Simulation engine variables
#
[engine]
time = 0 bind time
pace = 0 bind pace

#
# Membrane potential
#
[membrane]
V = engine.pace
    desc: membane potential
    in [mV]

[nernst]
EK = -85 [mV]

#
# Model from Kylie's mex file (HH)
#
[ikr]
use membrane.V
IKr = p11 *O * (V - nernst.EK)
IC = 1 - (I + O + C)

bm = p1 * exp(p2*V)
am = p3 * exp(-p4*V)
a1 = p5 * exp(p6*V)
b1 = p7 * exp(-p8*V)
a2 = p9 * exp(p10*V)
b2 = (a2*b1)/a1


dot(C) = am*O + b2*IC - C*(bm+a2)
dot(O) = b1*I + bm*C - O*(am+a1)
dot(I) = a1*O + bm*IC -I*(b1 + am)




p1 = 2.26e-4 [1/ms]
p2 = 0.06990 [1/mV]
p3 = 3.45e-5 [1/ms]
p4 = 0.05462 [1/mV]
p5 = 0.08730 [1/ms]
p6 = 8.91e-3 [1/mV]
p7 = 5.15e-3 [1/ms]
p8 = 0.03158 [1/mV]
p9 = 5.15e-3 [1/ms]
p10 = 0.03158 [1/mV]
p11 = 0.15240 [mS/uF]

n_params = 11

